CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Cond>.+)_Plate_(?P<Plate>[A-Z])_p\d+_\d+_(?P<WellRow>[A-Z])(?P<WellNum>\d+)f\d+d(?P<ImageIdx>[0-3])\.TIF$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DAPI': 'Cond', 'NP': 'Cond'}, {'DAPI': 'Plate', 'NP': 'Plate'}, {'DAPI': 'WellRow', 'NP': 'WellRow'}, {'DAPI': 'WellNum', 'NP': 'WellNum'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Plate "D") (metadata does ImageIdx "0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Plate "D") (metadata does ImageIdx "2")
    Name to assign these images:NP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DAPI
    Name the output image:RescaledDAPI
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:NP
    Name the output image:RescaledNP
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:RescaledDAPI
    Name the primary objects to be identified:IdentifyPrimaryObjectsDAPI
    Typical diameter of objects, in pixel units (Min,Max):2,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.094
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:RescaledNP
    Name the primary objects to be identified:IdentifyPrimaryObjectsNP
    Typical diameter of objects, in pixel units (Min,Max):2,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.094
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
MeasureObjectIntensity:[module_num:9|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
    Select images to measure:RescaledNP
    Select objects to measure:IdentifyPrimaryObjectsDAPI

CalculateMath:[module_num:10|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
    Name the output measurement:ReactionRate
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_IdentifyPrimaryObjectsDAPI
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_IdentifyPrimaryObjectsNP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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